system:
  ip_address: 10.0.0.1
  application_file: "autolamella"
  plasma_gas: "Argon" # proper case, e.g. Argon, Oxygen
  high_voltage: 30000 # volts
  rotation_flat_to_electron: 50 # degrees
  rotation_flat_to_ion: 230 # degrees
  tilt_flat_to_electron: 27 # degrees (pre_tilt)
  tilt_flat_to_ion: 52 # degrees
  stage_tilt_landing: 0 #13 # degrees
  piescope_enabled: False
  high_throughput: False
  autolamella: False
  initial_position:
    sample_grid: # need to check the coordinate systems
      x: -3.2375e-3
      y: 3.9354e-3
      z: 30.95e-3
      r: 0.872665
      t: null
      coordinate_system: "Raw"
    landing_grid:
      # x is +6 mm from sample grid center
      x: 2.76265e-3 # x: 2.76265e-3
      # y is the same as sample grid center
      y: 3.9354e-3 # y: 3.9354e-3
      # z is the same as sample grid center
      z: 31.379e-3 # z: 31.379e-3
      r: 0.872665
      t: null
      coordinate_system: "Raw"
calibration:
  imaging: # default imaging settings
    hfw: 150.e-6 # ion beam horizontal field of view (meters)
    beam_type: "Electron"
    dwell_time: 1.e-6
    resolution: "1536x1024"
    imaging_current: 20.e-12 # 20pA, 20kV for Ar, 30pA, 30kV for Xe # 3kV eB
    save: False
    autocontrast: True
    gamma: # gamma correction parameters
      enabled: True
      min_gamma: 0.15
      max_gamma: 1.8
      scale_factor: 0.01
      threshold: 46 # px
    milling_current: 2.e-9
  machine_learning:
    weights: boost_n05_model.pt # please place in liftout/models/
  initial:
    needle_eb_initial: [400, 200]
    needle_ib_initial: [800, 400]
  limits:
    max_hfw_eb: 2700.0e-6
    max_hfw_ib: 900.0e-6
    eucentric_height_eb: 4.0e-3
    eucentric_height_ib: 16.5e-3
    eucentric_height_tolerance: 0.5e-3
    needle_stage_height_limit: 3.7e-3 # relative coordinates
    max_working_distance_eb: 6.0e-3
  reference_hfw:
    # new config
    wide: 2750.e-6
    low: 900.e-6
    medium: 400.e-6
    high: 150.e-6
    super: 80.e-6
    ultra: 50.e-6